PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MemoryStudy
  keyboardBackend = ioHub
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Routines
  Routine Mem_Instructions
    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        You will now be presented with a string of images.

        For each image, you must identify whether you think it was previously presented to you in the experiment, or if it was not.

        Use the numbers 1-6 on your keyboard to indicate how confident you are that the image on screen has been presented to you already, on a scale of 1 (not at all confident) to 6 (very confident).

        Press the space bar to begin
    KeyboardComponent End_Instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MemoryTest
    VariableComponent Mem_curImage
      disabled = True
      startVal [time (s)] = 0
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    CodeComponent Mem_Code
      Code Type = Py
      disabled = True
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      Begin Experiment:
        trialClock = core.Clock()
        from os.path import exists
      Begin Routine:
        t = 0
        trialClock.reset()
        imageCount = 0
      Each Frame:
        t = trialClock.getTime()

        Mem_curImage = "This is a test"
        #"C:\\Users\\Psychology\\Documents\\ABExperiment\\MemoryStudy\\resources\\JPG\\" + Image

        imageCount = imageCount + 1


        #C:\Users\Psychology\Documents\ABExperiment\MemoryStudy\resources\JPG
    TextComponent MemTest
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = How confident are you that you saw this image?
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    KeyboardComponent MemResponse
      allowedKeys = '1','2','3','4','5','6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent Display
      image [set every repeat] = $FullPathName
      pos = (0, 0.15)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Not at all   1__2__3__4__5__6   Very
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  Routine Finish
    TextComponent endOfExperiment
      letterHeight = 0.03
      startVal [time (s)] = 10000
      stopVal [duration (s)] = 1.0
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      text:
        You have now completed the experiment.
        Thank you for your time.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Mem_Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Memory_conditionSheet.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
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      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'hockeypuck', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'kiwi03', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'lollipop04', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'postalmailbox01', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'parachute', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'rockbass', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'rollerblade', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'saxophone', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'scooter', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'stepladder', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'licenseplate', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'shower', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'stubbywrench01a', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'baseballbat', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'bed', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'foldingchair', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'butterfly', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'car', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'chefshat', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'church', 'FilePath': None},
      {'TrialType': 'Mem', 'Lag': 5, 'Image': 'Target', 'T1PA': 'P', 'T2PA': 'P', 'Picture': 'duck01', 'FilePath': None},
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    Routine MemoryTest
  LoopTerminator trials
  Routine Finish
